PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001', 'taskVersion': 'Garfinkel'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = HeartBeatCounting
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Routines
  Routine Start
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please press any button to continue
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import serial
        from systole.detection import oxi_peaks

        if expInfo['setup'] == 'behavioral':
            from systole.recording import findOximeter, Oximeter

            # PPG recording
            if expInfo['USBport']:
                portNb = expInfo['USBport']
            else:
                portNb = findOximeter()
                if portNb is None:
                    print('Cannot find the Pulse Oximeter automatically, please enter port reference in the GUI')
                    core.quit()

            port = serial.Serial(portNb)
            oxiTask = Oximeter(serial=port, sfreq=75, add_channels=1)
            oxiTask.setup().read(duration=1)

        # Output path
        out_path = 'data/%s/%s-%s' %(expInfo['participant'], expName, expInfo['date'])
  Routine Count
    ImageComponent image_2
      image = images/count.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_3
      Code Type = Py
      Each Frame:
        oxiTask.readInWaiting()
  Routine Rest
    ImageComponent image
      image = images/rest.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    CodeComponent code_4
      Code Type = Py
      Each Frame:
        oxiTask.readInWaiting()
  Routine StartSound
    SoundComponent sound_1
      sound = sounds/start.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Each Frame:
        oxiTask.readInWaiting()
  Routine EndSound
    SoundComponent sound_2
      sound = sounds/stop.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Py
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      Each Frame:
        oxiTask.readInWaiting()
  Routine End
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for your participation.

        Please wait for the next intructions.
  Routine ConfidenceRating
    CodeComponent code_6
      Code Type = Py
      Each Frame:
        oxiTask.readInWaiting()
      End Routine:
        oxiTask.save(out_path + f'_{str(trials.thisN)}_{condition}_{duration}.npy')
        oxiTask.setup()
Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine StartSound
    LoopInitiator trialCount loopType="TrialHandler"
      loopType = random
      nReps = nRepsCount
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      Routine Count
    LoopTerminator trialCount
    LoopInitiator trialsRest loopType="TrialHandler"
      loopType = random
      nReps = nRepsRest
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      Routine Rest
    LoopTerminator trialsRest
    Routine EndSound
    Routine ConfidenceRating
  LoopTerminator trials
  Routine End
