PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = HeartBeatCountingTutorial
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Routines
  Routine IntroductionCount
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = When you see this "heart" icon, you will silently count your heartbeats by focusing on your body sensations.
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  Routine IntroductionRest
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Sometime, you will also encounter this "rest" icon. In this case your task will just be to sit quietly until the next session.
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  Routine Introduction
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = During this experiment, we will ask you to silently count your heartbeats for different intervals of time.
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  Routine IntroductionSounds
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The beginning and the end of the task will be signalled when you hear the words "START" and "STOP". While counting your heartbeats, you may close your eyes if you find that helpful. Please keep your hand still during the counting period, to avoid interfering with the heartbeat recording.
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Flow
  Routine Introduction
  Routine IntroductionCount
  Routine IntroductionRest
  Routine IntroductionSounds
