PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data/%s/%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'USBport': '', 'setup': 'fMRI', 'staircaseType': 'psi', 'BrainVisionIP': '10.60.88.162'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = HRD_fMRI
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Routines
  Routine Decision
    MouseComponent mouse
      durationEstim = 5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      timeRelativeTo = routine
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    SoundComponent sound_1
      sound [set every repeat] = $responseFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent textDecision
      durationEstim = 5.0
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $decisionText
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        print('...decision')

        colorLess, colorMore = 'white', 'white'

        estimation = None

        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
            oxiTask.channels['Channel_0'][-1] = 3  # Start trigger
      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()

        if mouse.leftButton == [1]:
            estimation = 'Less'
            colorLess = 'blue'
            continueRoutine = False
        elif mouse.rightButton == [1]:
            estimation = 'More'
            colorMore = 'blue'
            continueRoutine = False
      End Routine:
        # Is the answer Correct? Update the staircase model
        if estimation is not None:

            print(f'...answer is {estimation}')

            if (estimation == 'More'):
                accuracy = 1
            elif (estimation == 'Less'):
                accuracy = 0

            nRatingScale = True
            NoResponseFeedback = False
            correct = ['True' if accuracy==1 else 'False']

            if expInfo['staircaseType'] == 'psi':
                if condition == 'Intero':
                    stairCaseIntero.addResponse(accuracy)
                    lambdaIntero.append(stairCaseIntero._psi._probLambda[0, :, :, 0])
                elif condition == 'Extero':
                    stairCaseExtero.addResponse(accuracy)
                    lambdaExtero.append(stairCaseExtero._psi._probLambda[0, :, :, 0])

            print(f'...Initial BPM: {listenBPM} - Staircase value: {alpha} - Response: {estimation} ({correct})')

        else:
            accuracy = 0
            nRatingScale = False
            NoResponseFeedback = True
            print('...No response provided')
    TextComponent text_Less
      color [set every frame] = $colorLess
      letterHeight = .1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Less
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    TextComponent text_More
      color [set every frame] = $colorMore
      letterHeight = .1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = More
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  Routine endScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating

        Please wait for the next instruction
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # group by participant folder: data/JWP/memoryTask-2014_Feb_15_1648
        out_path = 'data/%s/%s-%s' %(expInfo['participant'], expName, expInfo['date'])

        signal_df.to_csv(out_path + 'signal.txt')

        try:
            np.save(out_path + '_InteroPosteriorHistory', np.array(lambdaIntero))
        except:
            print('Saving Intero posterior history failled')
        try:
            stairCaseIntero.savePosterior(out_path + '_InteroPosterior')
        except:
            print('Saving Intero posterior failled')
        try:
            stairCaseIntero.saveAsPickle(out_path + '_InteroPickle')
        except:
            print('Saving Intero pickle failled')
        try:
            stairCaseIntero.saveAsJson(out_path + '_InteroJson')
        except:
            print('Saving Intero JSON failled')

        try:
            np.save(out_path + '_ExteroPosteriorHistory', np.array(lambdaExtero))
        except:
            print('Saving Extero posterior history failled')
        try:
            stairCaseExtero.savePosterior(out_path + '_ExteroPosterior')
        except:
            print('Saving Intero posterior failled')
        try:
            stairCaseExtero.saveAsPickle(out_path + '_ExteroPickle')
        except:
            print('Saving Intero pickle failled')
        try:
            stairCaseExtero.saveAsJson(out_path + '_ExteroJson')
        except:
            print('Saving Intero JSON failled')
  Routine getTrigger
    KeyboardComponent key_resp
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = .05
      startVal [time (s)] = 0.0
      text = Please press SPACE when you are ready to start
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import serial
        from systole.detection import oxi_peaks

        if expInfo['setup'] == 'behavioral':
            from systole.recording import findOximeter, Oximeter

            # PPG recording
            if expInfo['USBport']:
                portNb = expInfo['USBport']
            else:
                portNb = findOximeter()
                if portNb is None:
                    print('Cannot find the Pulse Oximeter automatically, please enter port reference in the GUI')
                    core.quit()

            port = serial.Serial(portNb)
            oxiTask = Oximeter(serial=port, sfreq=75, add_channels=1)
            oxiTask.setup().read(duration=1)
        elif expInfo['setup'] == 'fMRI':
            from systole.recording import BrainVisionExG

        signal_df = pd.DataFrame([])

        # Saircases
        if expInfo['staircaseType'] == 'psi':

            stairCaseIntero = data.PsiHandler(
                nTrials=100,
                intensRange=[-40.5, 40.5], alphaRange=[-40.5, 40.5],
                betaRange=[0.1, 20], intensPrecision=1,
                alphaPrecision=1, betaPrecision=0.1,
                delta=0.05, stepType='lin', expectedMin=0)

            stairCaseExtero = data.PsiHandler(
                nTrials=100,
                intensRange=[-40.5, 40.5], alphaRange=[-40.5, 40.5],
                betaRange=[0.1, 20], intensPrecision=1,
                alphaPrecision=1, betaPrecision=0.1,
                delta=0.05, stepType='lin', expectedMin=0)

            # Save the history of lambda values
            lambdaIntero, lambdaExtero = [], []
      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
  Routine feedback
    TextComponent text_Less_2
      color [set every repeat] = $colorLess
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Less
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    TextComponent text_More_2
      color [set every repeat] = $colorMore
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = More
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  Routine RatingScale
    RatingScaleComponent rating
      categoryChoices = Not confident at all, Highly confident
      disappear = True
      durationEstim = 3
      forceEndRoutine = True
      high = 100
      low = 1
      pos = 0, -0.4
      scaleDescription = How confident are you about your judgment.
      singleClick = True
      size = 1.0
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      storeHistory = True
      visualAnalogScale = True
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        if nRatingScale is False:
            continueRoutine = False

        print('...rating scale')

        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
            oxiTask.channels['Channel_0'][-1] = 4  # Start trigger
      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
      End Experiment:
        stairCaseIntero.saveAsExcel(expInfo['participant'])
        stairCaseIntero.saveAsPickle(expInfo['participant'])

        stairCaseExtero.saveAsExcel(expInfo['participant'])
        stairCaseExtero.saveAsPickle(expInfo['participant'])
      End Routine:
        if condition == 'Intero':
            (threshold, slope) = stairCaseIntero.estimateLambda()
        elif condition == 'Extero':
            (threshold, slope) = stairCaseExtero.estimateLambda()

        thisExp.addData('accuracy', accuracy)
        thisExp.addData('ListenBPM', listenBPM)
        thisExp.addData('ResponseBPM', responseBPM)
        thisExp.addData('alpha', alpha)
        thisExp.addData('slope', alpha)
        thisExp.addData('threshold', alpha)


        if condition == 'Intero':

            # Save physio signal
            this_df = pd.DataFrame({'signal': signal,
                                     'nTrial': pd.Series([trials.thisN] * len(signal), dtype="category")})

            signal_df = signal_df.append(this_df,
                                         ignore_index=True)
  Routine Intero
    ImageComponent Listen
      image = Images/heartbeat.png
      pos = (0, -.2)
      size = (.18480903, .15169271)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent textListen
      letterHeight = .1
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Listen to your heart
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        print('Starting Intero condition')

        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
            oxiTask.channels['Channel_0'][-1] = 1  # Start trigger
      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
        elif expInfo['setup'] == 'fMRI':
            if frameN >=1:
                # Read ExG
                recording = BrainVisionExG(ip=expInfo['BrainVisionIP'], sfreq=1000).read(5)
                signal, peaks = oxi_peaks(recording['PLETH'], sfreq=1000,
                                           clipping=False)
      End Routine:
        # Get actual heart Rate
        bpm = [15]
        if expInfo['setup'] == 'behavioral':
            signal, peaks = oxi_peaks(oxiTask.recording[-75*6:])

        bpm = 60000/np.diff(np.where(peaks[-5000:])[0])

        print(f'...bpm: {[round(i) for i in bpm]}')

        if not (np.any(bpm<30) or np.any(bpm>140)):

            listenBPM = round(bpm.mean() * 2) /2  # Round to nearest .5

            InteroLoop.finished = 1
            nRepsFeedbackBPM = False

            alpha = stairCaseIntero.next()

            # Check for extreme HR values, e.g. if HR changes massively from
            # trial to trial.
            if (listenBPM + alpha) < 15:
                responseBPM = '15.0'
            elif (listenBPM + alpha) > 199:
                responseBPM = '199.0'
            else:
                responseBPM = str(listenBPM + alpha)

            responseFile = os.path.join(os.getcwd(), 'sounds', str(responseBPM) + '.wav')
            print(f'...loading file: {responseFile}')

        else:
            nRepsFeedbackBPM = True

            print('WARNING: Noisy signal recording, cannnot estimate heart rate.')

            # Set default file is heart rate is not properly recorded
            alpha = 40
            file = os.path.join(os.getcwd(), 'sounds/60.wav')
  Routine Extero
    TextComponent text_3
      letterHeight = .05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Listen to the tones
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    ImageComponent image_2
      image = Images/Listen.png
      pos = (0, -.2)
      size = (.15, .15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        print('Starting Extero condition')

        if expInfo['staircaseType'] == 'psi':
            alpha = stairCaseExtero.next()

        # Random selection of HR frequency
        listenBPM = np.random.choice(np.arange(40, 100, 0.5))
        listenFile = os.path.join(os.getcwd(), 'sounds', str(listenBPM) + '.wav')
        print(f'...loading file: {listenFile}')

        responseBPM = str(listenBPM + alpha)

        # Check for extreme values
        if (listenBPM + alpha) < 15:
            responseBPM = '15.0'
        elif (listenBPM + alpha) > 199:
            responseBPM = '199.0'
        else:
            responseBPM = str(listenBPM + alpha)

        responseFile = os.path.join(os.getcwd(), 'sounds', responseBPM + '.wav')
        print(f'...loading file: {responseFile}')
      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
    SoundComponent sound_2
      sound [set every repeat] = $listenFile
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.0
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  Routine Feedback
    TextComponent text_4
      color = red
      durationEstim = 0.5
      letterHeight = .1
      startEstim = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Too late
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        if NoResponseFeedback is False:
            continueRoutine = False
  Routine Feedback2
    TextComponent text_5
      color = red
      durationEstim = 1
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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  Routine Feedback_2
    TextComponent text_6
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Pleqse stay still during the recording
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  Routine feedbackDecision
    TextComponent text_Less_3
      color [set every frame] = $colorLess
      letterHeight = .1
      pos = (-.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = Less
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    TextComponent text_More_3
      color [set every frame] = $colorMore
      letterHeight = .1
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = More
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        if nRatingScale is False:
            continueRoutine = False
  Routine fixCross2
    PolygonComponent fiCross1_2
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (.1, .1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_6
      Code Type = Py
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      Each Frame:
        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
  Routine FeedbackIntero
    TextComponent text_7
      color = red
      letterHeight = .05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        if nRepsFeedbackBPM is False:
            continueRoutine = False
  Routine ITI
    PolygonComponent fiCross1
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (.1, .1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        jitter = np.arange(1, 2, .1)
        shuffle(jitter)

        if condition == 'Intero':
            nRepsIntero = 5
            nRepsExtero = 0
            decisionText = """Do you think the tone frequency is higher or lower than your heart rate?

        Lower (Left button) - Higher (Right button)"""
        elif condition == 'Extero':
            nRepsIntero = 0
            nRepsExtero = 1
            decisionText = """Do you think the tone frequency is higher or lower than the previous one?

        Lower (Left button) - Higher (Right button)"""

        if expInfo['setup'] == 'behavioral':
            oxiTask.readInWaiting()
            oxiTask.channels['Channel_0'][-1] = 10  # Start trigger
  Routine Break
    TextComponent text_8
      letterHeight = .1
      startVal [time (s)] = 0.0
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      text:
        Break

        You can relax as long as you want

        Press any button to continue
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if not ((trials.thisN % 25 == 0) & (trials.thisN != 0)):
            continueRoutine = False
      End Routine:
        if expInfo['setup'] == 'behavioral':
            out_path = 'data/%s/%s-%s' %(expInfo['participant'], expName, expInfo['date'])
            oxiTask.save(out_path + '_' + str(trials.thisN) + '.npy')
            oxiTask.setup()
Flow
  Routine getTrigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [OrderedDict([('Condition', 'Intero')]),
      OrderedDict([('Condition', 'Extero')])]
    Routine ITI
    LoopInitiator InteroLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nRepsIntero
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      Routine Intero
      Routine FeedbackIntero
    LoopTerminator InteroLoop
    LoopInitiator ExteroLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nRepsExtero
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      Routine Extero
    LoopTerminator ExteroLoop
    Routine fixCross2
    Routine Decision
    Routine feedbackDecision
    Routine RatingScale
    Routine Feedback
    Routine Break
  LoopTerminator trials
  Routine endScreen
