PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'data/%s/%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = HRD_fMRI
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Routines
  Routine Decision
    MouseComponent mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
      timeRelativeTo = routine
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    SoundComponent sound_1
      sound [set every repeat] = $file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    TextComponent textDecision
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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      text:
        Do you think the tone frequency was higher or lower than your heart rate?

        Lower (Left button) - Higher (Right button)
    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        colorLess, colorMore = 'white', 'white'
    CodeComponent code_6
      Code Type = Py
      End Routine:
        # Is the answer Correct? Update the staircase model
        if estimation is not None:
            if (estimation == 'More') & (alpha > 0):
                stairCaseIntero.addResponse(1)
                accuracy = 1
            elif (estimation == 'Less') & (alpha < 0):
                stairCaseIntero.addResponse(1)
                accuracy = 1
            else:
                stairCaseIntero.addResponse(0)
                accuracy = 0
            nRepsRatingScale = 1
            nRepsFeeback = 0
            correct = ['True' if accuracy==1 else 'False']
            print(f'Initial BPM: {average_hr} - Staircase value: {alpha} - Response: {estimation} ({correct}) - Condition: {condition}')
        else:
            nRepsRatingScale = 0
            nRepsFeeback = 1
            print('No response provided')
    TextComponent text_Less
      color [set every frame] = $colorLess
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
      text = Less
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    TextComponent text_More
      color [set every frame] = $colorMore
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
      text = More
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        estimation = None
      Each Frame:
        if mouse.leftButton == [1]:
            estimation = 'Less'
            colorLess = 'blue'
        elif mouse.rightButton == [1]:
            estimation = 'More'
            colorMore = 'blue'
  Routine fixCross
    PolygonComponent fiCross1
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        from systole.recording import BrainVisionExG
        from systole.detection import oxi_peaks

        signal_df = pd.DataFrame([])

        stairCaseIntero = data.PsiHandler(
            nTrials=50,
            intensRange=[-40.5, 40.5], alphaRange=[-40.5, 40.5],
            betaRange=[0.1, 20], intensPrecision=1,
            alphaPrecision=1, betaPrecision=0.1,
            delta=0.05, stepType='lin', expectedMin=0)

        stairCaseExtero = data.PsiHandler(
            nTrials=50,
            intensRange=[-40.5, 40.5], alphaRange=[-40.5, 40.5],
            betaRange=[0.1, 20], intensPrecision=1,
            alphaPrecision=1, betaPrecision=0.1,
            delta=0.05, stepType='lin', expectedMin=0)
      Begin Routine:
        jitter = np.arange(4, 6, .1)
        shuffle(jitter)

        if condition == 'Intero':
            nRepsIntero = 5
            nRepsExtero = 0
        elif condition == 'Extero':
            nRepsIntero = 0
            nRepsExtero = 1
  Routine fixCross2
    PolygonComponent fiCross2
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        jitter = np.arange(0, 2, .1)
        shuffle(jitter)
  Routine endScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating

        Please wait for the next instruction
    CodeComponent code_2
      Code Type = Py
      End Experiment:
        # group by participant folder: data/JWP/memoryTask-2014_Feb_15_1648
        out_path = 'data/%s/%s-%s' %(expInfo['participant'], expName, expInfo['date'])

        signal_df.to_csv(out_path + 'signal.txt')

        try:
            stairCaseIntero.savePosterior(out_path)
            stairCaseIntero.saveAsPickle(out_path)
            stairCaseIntero.saveAsJson(out_path)
            stairCaseIntero.saveAsText(out_path)
        except:
            print('No staircaseIntero provided')

        try:
            stairCaseExtero.savePosterior(out_path)
            stairCaseExtero.saveAsPickle(out_path)
            stairCaseExtero.saveAsJson(out_path)
            stairCaseExtero.saveAsText(out_path)
        except:
            print('No staircaseExtero provided')
  Routine getTrigger
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for trigger
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  Routine feedback
    TextComponent text_Less_2
      color [set every repeat] = $colorLess
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Less
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    TextComponent text_More_2
      color [set every repeat] = $colorMore
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = More
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  Routine RatingScale
    RatingScaleComponent rating
      categoryChoices = Not confident at all, Highly confident
      disappear = True
      durationEstim = 3
      forceEndRoutine = True
      high = 100
      low = 1
      pos = 0, -0.4
      scaleDescription = How confident are you about your judgment.
      singleClick = True
      size = 1.0
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      storeHistory = True
      visualAnalogScale = True
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    CodeComponent code_9
      Code Type = Py
      End Experiment:
        stairCaseIntero.saveAsExcel(expInfo['participant'])
        stairCaseIntero.saveAsPickle(expInfo['participant'])

        stairCaseExtero.saveAsExcel(expInfo['participant'])
        stairCaseExtero.saveAsPickle(expInfo['participant'])
      End Routine:
        thisExp.addData('accuracy', accuracy)
        thisExp.addData('AverageHR', average_hr)
        thisExp.addData('jitter', jitter[0])

        # Save physio signal
        if condition == 'Intero':
            this_df = pd.DataFrame({'signal': signal,
                                     'nTrial': pd.Series([trials.thisN] * len(signal), dtype="category")})
            signal_df = signal_df.append(this_df,
                                         ignore_index=True)
  Routine Intero
    ImageComponent Listen
      image = Images/heartbeat.png
      pos = (0, -0.2)
      size = (0.18480903, 0.15169271)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    TextComponent textListen
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
      text = Listen to your Heart
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        # Read ExG
        recording = BrainVisionExG(ip='10.60.88.162', sfreq=1000).read(5)

        signal = np.array(recording['PLETH'])
        signal, peaks = oxi_peaks(signal, sfreq=1000,
                                  clipping=False)

        # Get actual heart Rate
        bpm = (60000/np.diff(np.where(peaks)[0]))

        print(trials.thisN)
        print(bpm)

        if not (np.any(bpm<30) or np.any(bpm>140)):

            average_hr = int(bpm.mean())

            trials_2.finished = 1
            nRepsFeedbackBPM = 0

            alpha = stairCaseIntero.next()

            # Check for extreme HR values, e.g. if HR changes massively from
            # trial to trial.
            if (average_hr + alpha) < 15:
                hr = '15'
            elif (average_hr + alpha) > 199:
                hr = '199'
            else:
                hr = str(int(average_hr + alpha))

            file = os.path.join(os.getcwd(), 'sounds', hr + '.wav')
        else:
            nRepsFeedbackBPM = 1

            print('WARNING: Noisy signal recording, cannnot estimate heart rate.')

            # Set default file is heart rate is not properly recorded
            alpha = 40
            file = os.path.join(os.getcwd(), 'sounds/60.wav')
  Routine Extero
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
      text = Listen to the tones
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    ImageComponent image_2
      image = Images/Listen.png
      pos = (0, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        alpha = stairCaseExtero.next()

        # Random selection of HR frequency
        average_hr = np.random.choice(np.arange(40, 100))
        hr = str(int(average_hr + alpha))

        file = os.path.join(os.getcwd(), 'sounds', hr + '.wav')
    SoundComponent sound_2
      sound [set every repeat] = $file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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  Routine Feedback
    TextComponent text_4
      color = red
      durationEstim = 2.0
      letterHeight = 0.1
      startEstim = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Too late
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  Routine Feedback2
    TextComponent text_5
      color = red
      durationEstim = 1
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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  Routine Feedback_2
    TextComponent text_6
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Pleqse stay still during the recording
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  Routine Feedback2_2
    TextComponent text_7
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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  Routine sendTrigger
Flow
  Routine getTrigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Extero')]),
      OrderedDict([('condtion', 'Intero')]),
      OrderedDict([('condtion', 'Intero')])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
    Routine sendTrigger
    Routine fixCross
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsIntero
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      Routine Intero
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = random
        nReps = nRepsFeedbackBPM
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        Routine Feedback2_2
      LoopTerminator trials_6
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = nRepsExtero
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      Routine Extero
    LoopTerminator trials_3
    Routine Decision
    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = nRepsRatingScale
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      Routine RatingScale
    LoopTerminator trials_5
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = nRepsFeeback
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      Routine Feedback
    LoopTerminator trials_4
  LoopTerminator trials
  Routine endScreen
