PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
      text = During this experiment, we are going to record your heart rate and generate sounds reflecting your cardiac activity.
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.04
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = Please press any button to continue
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  Routine Part3
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        After this procedure, you will see the listening andresponse icons.

        You will then have to focus on the tone frequency and decide if it is faster (RIGHT button) or slower (LEFT butting) than your recorded heart rate in the listening interval.

        The tone frequency will ALWAYS be slower or faster than your heart rate as previously recorded. Please guess if you are unsure.
    ImageComponent image_2
      image = Images/listenResponse.png
      pos = (0, -0.2)
      size = (0.39609375, 0.16111111)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = Please press any button to continue
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Part1
    TextComponent text_2
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = When this heart icon is presented, you will have to focus on your cardiac activity while it is recorded for 5 seconds.
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    ImageComponent image
      image = Images/heartbeat.png
      pos = (0, -0.2)
      size = (0.18480903, 0.15169271)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = Please press any button to continue
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  Routine Part4
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Once you have provided your decision, you will also be asked to provide your level of confidence.

        A high number here means that you are totally certain in your choice, a small number means that you are guessing.

        You should use the RIGHT and LEFT key to select your response and the DOWN key to confirm.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -4)
      startVal [time (s)] = 0.0
      text = Please press any button to continue
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  Routine endTutorial
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have now completed the tutorial for this experiment.

        If any point is still unclear for you, do not hesitate to ask the experimenter.

        If you want to go through this tutorial again, please press the LEFT button.

        Otherwise, please press the RIGHT button.
    CodeComponent code
      Code Type = Py
      Each Frame:
        if mouse_4.leftButton == [1]:
            trials.finished = 1
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine startTutorial
    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This tutorial will introduce you to the task you will have to perform during the scanner.

        We will detail you each element step by step.

        Please press any button when you are ready to start.
    CodeComponent code_2
      Code Type = Py
      Each Frame:
        if mouse_6.leftButton == [1]:
            trials.finished = 1
    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine startTutorial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine Part1
    Routine Part3
    Routine Part4
    Routine endTutorial
  LoopTerminator trials
